begin model
begin parameters
  t0_CAMP_cyt                           1.000000e+02
  t0_WATER_cyt                          1.000000e+02
  t0_PROTON_per                         1.000000e+02
  t0_beta_lactose_per                   1.000000e+02
  fwd_LACTOSE_MUTAROTATION              1.000000e-02
  rvs_LACTOSE_MUTAROTATION              1.000000e-02
  fwd_GALACTOSE_MUTAROTATION            1.000000e-02
  rvs_GALACTOSE_MUTAROTATION            1.000000e-02
  fwd_GLUCOSE_MUTAROTATION              1.000000e-02
  rvs_GLUCOSE_MUTAROTATION              1.000000e-02
  fwd_TRANS_RXN_24                      1.000000e-04
  rvs_TRANS_RXN_24                      0.000000e+00
  fwd_TRANS_RXN_24_beta                 1.000000e-04
  rvs_TRANS_RXN_24_beta                 0.000000e+00
  fwd_TRANS_RXN_94                      1.000000e-04
  rvs_TRANS_RXN_94                      0.000000e+00
  fwd_RXN0_7215                         1.000000e-04
  rvs_RXN0_7215                         0.000000e+00
  fwd_RXN0_7217                         1.000000e-04
  rvs_RXN0_7217                         0.000000e+00
  fwd_RXN_17755                         1.000000e-04
  rvs_RXN_17755                         0.000000e+00
  fwd_BETAGALACTOSID_RXN                1.000000e-02
  rvs_BETAGALACTOSID_RXN                0.000000e+00
  fwd_BETAGALACTOSID_RXN_alpha          1.000000e-02
  rvs_BETAGALACTOSID_RXN_alpha          0.000000e+00
  fwd_RXN0_5363                         1.000000e+00
  rvs_RXN0_5363                         1.000000e-02
  fwd_RXN0_5363_beta                    1.000000e+00
  rvs_RXN0_5363_beta                    1.000000e-02
  fwd_ALLOLACTOSE_DEG_alpha             0.000000e+00
  rvs_ALLOLACTOSE_DEG_alpha             0.000000e+00
  fwd_ALLOLACTOSE_DEG_beta              0.000000e+00
  rvs_ALLOLACTOSE_DEG_beta              0.000000e+00
  fwd_RXN_17726                         1.000000e+00
  rvs_RXN_17726                         0.000000e+00
  fwd_RXN0_7219                         1.000000e+00
  rvs_RXN0_7219                         0.000000e+00
  fwd_GALACTOACETYLTRAN_RXN_galactose   1.000000e+00
  rvs_GALACTOACETYLTRAN_RXN_galactose   0.000000e+00
  fwd_complex_assembly_rule_0           1.000000e+00
  rvs_complex_assembly_rule_0           0.000000e+00
  fwd_complex_assembly_rule_1           1.000000e+00
  rvs_complex_assembly_rule_1           0.000000e+00
  fwd_complex_assembly_rule_2           1.000000e+00
  rvs_complex_assembly_rule_2           0.000000e+00
  fwd_complex_assembly_rule_3           1.000000e+00
  rvs_complex_assembly_rule_3           0.000000e+00
  fwd_docking_lacZ_pro4                 1.000000e+00
  rvs_docking_lacZ_pro4                 1.000000e+00
  fwd_docking_lacZ_pro3                 1.000000e+00
  rvs_docking_lacZ_pro3                 1.000000e+00
  fwd_docking_lacZ_pro2                 1.000000e+00
  rvs_docking_lacZ_pro2                 1.000000e+00
  fwd_docking_lacZ_pro1                 1.000000e+00
  rvs_docking_lacZ_pro1                 1.000000e+00
  fwd_falloff_lacA_ter1                 1.000000e+00
  fwd_falloff_lacA_ter2                 1.000000e+00
  fwd_sliding_lacZ_pro4                 1.000000e+00
  fwd_sliding_lacZ_pro3                 1.000000e+00
  fwd_sliding_lacZ_pro2                 1.000000e+00
  fwd_sliding_lacZ_pro1                 1.000000e+00
  fwd_sliding_lacZ_rbs                  1.000000e+00
  fwd_sliding_lacZ_cds                  1.000000e+00
  fwd_sliding_lacY_pro1                 1.000000e+00
  fwd_sliding_lacY_rbs                  1.000000e+00
  fwd_sliding_lacY_cds                  1.000000e+00
  fwd_sliding_lacA_rbs                  1.000000e+00
  fwd_sliding_lacA_cds                  1.000000e+00
  fwd_sliding_lacA_ter1                 1.000000e+00
  fwd_dr_lacZ_rbs                       1.000000e+00
  rvs_dr_lacZ_rbs                       1.000000e+00
  fwd_dr_lacY_rbs                       1.000000e+00
  rvs_dr_lacY_rbs                       1.000000e+00
  fwd_dr_lacA_rbs                       1.000000e+00
  rvs_dr_lacA_rbs                       1.000000e+00
  fwd_fr_lacA_ter1                      1.000000e+00
  fwd_fr_lacA_ter2                      1.000000e+00
  fwd_sr_lacZ_rbs                       1.000000e+00
  fwd_sr_lacZ_cds                       1.000000e+00
  fwd_sr_lacY_pro1                      1.000000e+00
  fwd_sr_lacY_rbs                       1.000000e+00
  fwd_sr_lacY_cds                       1.000000e+00
  fwd_sr_lacA_rbs                       1.000000e+00
  fwd_sr_lacA_cds                       1.000000e+00
  fwd_sr_lacA_ter1                      1.000000e+00
  t0_operon_lacZYA                      1.000000e+00
  t0_RNAP                               1.000000e+00
  t0_ribosome                           1.000000e+00
  fwd_ProtMet_RuleAssembly_1            1.000000e-01
  rvs_ProtMet_RuleAssembly_1            0.000000e+00
  t0_lacI                               3.000000e+00
  t0_lacY                               1.000000e+00
  t0_lacZ                               4.000000e+00
  fwd_TF_TFBS_rule_1                    1.000000e+00
  rvs_TF_TFBS_rule_1                    0.000000e+00
  fwd_TF_TFBS_rule_2                    1.000000e+00
end parameters

begin molecule types
  met(name~alpha_GALACTOSE~CPD_3801~ACETYL_COA~CO_A~CPD_3561~beta_lactose~PROTON~alpha_ALLOLACTOSE~WATER~alpha_glucose~D_ARABINOSE~_6_Acetyl_beta_D_Galactose~CPD_3785~Fructofuranose~MELIBIOSE~alpha_lactose~beta_ALLOLACTOSE~beta_glucose~beta_GALACTOSE~CAMP,loc~cyt~per~ex,prot)
  dna(name~lacZ~lacY~lacA,type~pro1~pro2~pro3~pro4~rbs~cds~ter1~ter2,prot,up,dw)
  rna(name~lacZ~lacY~lacA,type~pro1~pro2~pro3~pro4~rbs~cds~ter1~ter2,prot)
  prot(name~lacY~lacZ~lacA~lacI~crp,dna,met,prot,rna,up,dw)
  cplx(name~RNAP~Ribosome,dna,prot,rna)
end molecule types

begin observables
  Molecules obs_MELIBIOSE_cyt                    met(name~MELIBIOSE,loc~cyt,prot)
  Molecules obs_MELIBIOSE_per                    met(name~MELIBIOSE,loc~per,prot)
  Molecules obs_MELIBIOSE_ex                     met(name~MELIBIOSE,loc~ex,prot)
  Molecules obs_WATER_cyt                        met(name~WATER,loc~cyt,prot)
  Molecules obs_WATER_per                        met(name~WATER,loc~per,prot)
  Molecules obs_WATER_ex                         met(name~WATER,loc~ex,prot)
  Molecules obs_D_ARABINOSE_cyt                  met(name~D_ARABINOSE,loc~cyt,prot)
  Molecules obs_D_ARABINOSE_per                  met(name~D_ARABINOSE,loc~per,prot)
  Molecules obs_D_ARABINOSE_ex                   met(name~D_ARABINOSE,loc~ex,prot)
  Molecules obs_CO_A_cyt                         met(name~CO_A,loc~cyt,prot)
  Molecules obs_CO_A_per                         met(name~CO_A,loc~per,prot)
  Molecules obs_CO_A_ex                          met(name~CO_A,loc~ex,prot)
  Molecules obs_ACETYL_COA_cyt                   met(name~ACETYL_COA,loc~cyt,prot)
  Molecules obs_ACETYL_COA_per                   met(name~ACETYL_COA,loc~per,prot)
  Molecules obs_ACETYL_COA_ex                    met(name~ACETYL_COA,loc~ex,prot)
  Molecules obs_PROTON_cyt                       met(name~PROTON,loc~cyt,prot)
  Molecules obs_PROTON_per                       met(name~PROTON,loc~per,prot)
  Molecules obs_PROTON_ex                        met(name~PROTON,loc~ex,prot)
  Molecules obs_alpha_glucose_cyt                met(name~alpha_glucose,loc~cyt,prot)
  Molecules obs_alpha_glucose_per                met(name~alpha_glucose,loc~per,prot)
  Molecules obs_alpha_glucose_ex                 met(name~alpha_glucose,loc~ex,prot)
  Molecules obs_alpha_ALLOLACTOSE_cyt            met(name~alpha_ALLOLACTOSE,loc~cyt,prot)
  Molecules obs_alpha_ALLOLACTOSE_per            met(name~alpha_ALLOLACTOSE,loc~per,prot)
  Molecules obs_alpha_ALLOLACTOSE_ex             met(name~alpha_ALLOLACTOSE,loc~ex,prot)
  Molecules obs_beta_ALLOLACTOSE_cyt             met(name~beta_ALLOLACTOSE,loc~cyt,prot)
  Molecules obs_beta_ALLOLACTOSE_per             met(name~beta_ALLOLACTOSE,loc~per,prot)
  Molecules obs_beta_ALLOLACTOSE_ex              met(name~beta_ALLOLACTOSE,loc~ex,prot)
  Molecules obs_beta_GALACTOSE_cyt               met(name~beta_GALACTOSE,loc~cyt,prot)
  Molecules obs_beta_GALACTOSE_per               met(name~beta_GALACTOSE,loc~per,prot)
  Molecules obs_beta_GALACTOSE_ex                met(name~beta_GALACTOSE,loc~ex,prot)
  Molecules obs_CPD_3785_cyt                     met(name~CPD_3785,loc~cyt,prot)
  Molecules obs_CPD_3785_per                     met(name~CPD_3785,loc~per,prot)
  Molecules obs_CPD_3785_ex                      met(name~CPD_3785,loc~ex,prot)
  Molecules obs_alpha_lactose_cyt                met(name~alpha_lactose,loc~cyt,prot)
  Molecules obs_alpha_lactose_per                met(name~alpha_lactose,loc~per,prot)
  Molecules obs_alpha_lactose_ex                 met(name~alpha_lactose,loc~ex,prot)
  Molecules obs_CPD_3801_cyt                     met(name~CPD_3801,loc~cyt,prot)
  Molecules obs_CPD_3801_per                     met(name~CPD_3801,loc~per,prot)
  Molecules obs_CPD_3801_ex                      met(name~CPD_3801,loc~ex,prot)
  Molecules obs_alpha_GALACTOSE_cyt              met(name~alpha_GALACTOSE,loc~cyt,prot)
  Molecules obs_alpha_GALACTOSE_per              met(name~alpha_GALACTOSE,loc~per,prot)
  Molecules obs_alpha_GALACTOSE_ex               met(name~alpha_GALACTOSE,loc~ex,prot)
  Molecules obs_CPD_3561_cyt                     met(name~CPD_3561,loc~cyt,prot)
  Molecules obs_CPD_3561_per                     met(name~CPD_3561,loc~per,prot)
  Molecules obs_CPD_3561_ex                      met(name~CPD_3561,loc~ex,prot)
  Molecules obs_Fructofuranose_cyt               met(name~Fructofuranose,loc~cyt,prot)
  Molecules obs_Fructofuranose_per               met(name~Fructofuranose,loc~per,prot)
  Molecules obs_Fructofuranose_ex                met(name~Fructofuranose,loc~ex,prot)
  Molecules obs__6_Acetyl_beta_D_Galactose_cyt   met(name~_6_Acetyl_beta_D_Galactose,loc~cyt,prot)
  Molecules obs__6_Acetyl_beta_D_Galactose_per   met(name~_6_Acetyl_beta_D_Galactose,loc~per,prot)
  Molecules obs__6_Acetyl_beta_D_Galactose_ex    met(name~_6_Acetyl_beta_D_Galactose,loc~ex,prot)
  Molecules obs_beta_lactose_cyt                 met(name~beta_lactose,loc~cyt,prot)
  Molecules obs_beta_lactose_per                 met(name~beta_lactose,loc~per,prot)
  Molecules obs_beta_lactose_ex                  met(name~beta_lactose,loc~ex,prot)
  Molecules obs_beta_glucose_cyt                 met(name~beta_glucose,loc~cyt,prot)
  Molecules obs_beta_glucose_per                 met(name~beta_glucose,loc~per,prot)
  Molecules obs_beta_glucose_ex                  met(name~beta_glucose,loc~ex,prot)
  Molecules obs_rnap                             cplx(name~RNAP,dna,rna)
  Molecules obs_ribosome                         cplx(name~Ribosome,dna,rna)
end observables

begin species
  met(name~CAMP,loc~cyt,prot)                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                           t0_CAMP_cyt
  met(name~WATER,loc~cyt,prot)                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                          t0_WATER_cyt
  met(name~PROTON,loc~per,prot)                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                         t0_PROTON_per
  met(name~beta_lactose,loc~per,prot)                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                   t0_beta_lactose_per
  dna(name~lacZ,type~pro4,prot,up,dw!1).dna(name~lacZ,type~pro3,prot,up!1,dw!2).dna(name~lacZ,type~pro2,prot,up!2,dw!3).dna(name~lacZ,type~pro1,prot,up!3,dw!4).dna(name~lacZ,type~rbs,prot,up!4,dw!5).dna(name~lacZ,type~cds,prot,up!5,dw!6).dna(name~lacY,type~pro1,prot,up!6,dw!7).dna(name~lacY,type~rbs,prot,up!7,dw!8).dna(name~lacY,type~cds,prot,up!8,dw!9).dna(name~lacA,type~rbs,prot,up!9,dw!10).dna(name~lacA,type~cds,prot,up!10,dw!11).dna(name~lacA,type~ter1,prot,up!11,dw!12).dna(name~lacA,type~ter2,prot,up!12,dw)   t0_operon_lacZYA
  cplx(name~RNAP,dna,prot,rna)                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                          t0_RNAP
  cplx(name~Ribosome,dna,prot,rna)                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                      t0_ribosome
  prot(name~lacI,dna,met,prot,rna,up,dw)                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                t0_lacI
  prot(name~lacY,dna,met,prot,rna,up,dw)                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                t0_lacY
  prot(name~lacZ,dna,met,prot,rna,up,dw)                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                t0_lacZ
end species

begin reaction rules
  LACTOSE_MUTAROTATION:             met(name~alpha_lactose) <-> met(name~beta_lactose)    fwd_LACTOSE_MUTAROTATION, rvs_LACTOSE_MUTAROTATION
  GALACTOSE_MUTAROTATION:           met(name~alpha_GALACTOSE) <-> met(name~beta_GALACTOSE)    fwd_GALACTOSE_MUTAROTATION, rvs_GALACTOSE_MUTAROTATION
  GLUCOSE_MUTAROTATION:             met(name~alpha_glucose) <-> met(name~beta_glucose)    fwd_GLUCOSE_MUTAROTATION, rvs_GLUCOSE_MUTAROTATION
  TRANS_RXN_24:                     prot(name~lacY) + met(name~PROTON,loc~per) + met(name~alpha_lactose,loc~per) <-> prot(name~lacY) + met(name~PROTON,loc~cyt) + met(name~alpha_lactose,loc~cyt)    fwd_TRANS_RXN_24, rvs_TRANS_RXN_24
  TRANS_RXN_24_beta:                prot(name~lacY) + met(name~PROTON,loc~per) + met(name~beta_lactose,loc~per) <-> prot(name~lacY) + met(name~PROTON,loc~cyt) + met(name~beta_lactose,loc~cyt)    fwd_TRANS_RXN_24_beta, rvs_TRANS_RXN_24_beta
  TRANS_RXN_94:                     prot(name~lacY) + met(name~PROTON,loc~per) + met(name~MELIBIOSE,loc~per) <-> prot(name~lacY) + met(name~PROTON,loc~cyt) + met(name~MELIBIOSE,loc~cyt)    fwd_TRANS_RXN_94, rvs_TRANS_RXN_94
  RXN0_7215:                        prot(name~lacY) + met(name~PROTON,loc~per) + met(name~CPD_3561,loc~per) <-> prot(name~lacY) + met(name~PROTON,loc~cyt) + met(name~CPD_3561,loc~cyt)    fwd_RXN0_7215, rvs_RXN0_7215
  RXN0_7217:                        prot(name~lacY) + met(name~PROTON,loc~per) + met(name~CPD_3785,loc~per) <-> prot(name~lacY) + met(name~PROTON,loc~cyt) + met(name~CPD_3785,loc~cyt)    fwd_RXN0_7217, rvs_RXN0_7217
  RXN_17755:                        prot(name~lacY) + met(name~PROTON,loc~per) + met(name~CPD_3801,loc~per) <-> prot(name~lacY) + met(name~PROTON,loc~cyt) + met(name~CPD_3801,loc~cyt)    fwd_RXN_17755, rvs_RXN_17755
  BETAGALACTOSID_RXN:               prot(name~lacZ,up!+,dw!+) + met(name~beta_lactose,loc~cyt) + met(name~WATER,loc~cyt) <-> prot(name~lacZ,up!+,dw!+) + met(name~beta_GALACTOSE,loc~cyt) + met(name~beta_glucose,loc~cyt)    fwd_BETAGALACTOSID_RXN, rvs_BETAGALACTOSID_RXN
  BETAGALACTOSID_RXN_alpha:         prot(name~lacZ,up!+,dw!+) + met(name~alpha_lactose,loc~cyt) + met(name~WATER,loc~cyt) <-> prot(name~lacZ,up!+,dw!+) + met(name~alpha_GALACTOSE,loc~cyt) + met(name~alpha_glucose,loc~cyt)    fwd_BETAGALACTOSID_RXN_alpha, rvs_BETAGALACTOSID_RXN_alpha
  RXN0_5363:                        prot(name~lacZ,up!+,dw!+) + met(name~alpha_lactose,loc~cyt) <-> prot(name~lacZ,up!+,dw!+) + met(name~alpha_ALLOLACTOSE,loc~cyt)    fwd_RXN0_5363, rvs_RXN0_5363
  RXN0_5363_beta:                   prot(name~lacZ,up!+,dw!+) + met(name~beta_lactose,loc~cyt) <-> prot(name~lacZ,up!+,dw!+) + met(name~beta_ALLOLACTOSE,loc~cyt)    fwd_RXN0_5363_beta, rvs_RXN0_5363_beta
  ALLOLACTOSE_DEG_alpha:            prot(name~lacZ,up!+,dw!+) + met(name~alpha_ALLOLACTOSE,loc~cyt) + met(name~WATER,loc~cyt) <-> prot(name~lacZ,up!+,dw!+) + met(name~alpha_GALACTOSE,loc~cyt) + met(name~alpha_glucose,loc~cyt)    fwd_ALLOLACTOSE_DEG_alpha, rvs_ALLOLACTOSE_DEG_alpha
  ALLOLACTOSE_DEG_beta:             prot(name~lacZ,up!+,dw!+) + met(name~beta_ALLOLACTOSE,loc~cyt) + met(name~WATER,loc~cyt) <-> prot(name~lacZ,up!+,dw!+) + met(name~beta_GALACTOSE,loc~cyt) + met(name~beta_glucose,loc~cyt)    fwd_ALLOLACTOSE_DEG_beta, rvs_ALLOLACTOSE_DEG_beta
  RXN_17726:                        prot(name~lacZ,up!+,dw!+) + met(name~CPD_3561,loc~cyt) + met(name~WATER,loc~cyt) <-> prot(name~lacZ,up!+,dw!+) + met(name~beta_GALACTOSE,loc~cyt) + met(name~Fructofuranose,loc~cyt)    fwd_RXN_17726, rvs_RXN_17726
  RXN0_7219:                        prot(name~lacZ,up!+,dw!+) + met(name~CPD_3785,loc~cyt) + met(name~WATER,loc~cyt) <-> prot(name~lacZ,up!+,dw!+) + met(name~beta_GALACTOSE,loc~cyt) + met(name~D_ARABINOSE,loc~cyt)    fwd_RXN0_7219, rvs_RXN0_7219
  GALACTOACETYLTRAN_RXN_galactose:  prot(name~lacA,up!+,dw!+) + met(name~beta_GALACTOSE,loc~cyt) + met(name~ACETYL_COA,loc~cyt) <-> prot(name~lacA,up!+,dw!+) + met(name~_6_Acetyl_beta_D_Galactose,loc~cyt) + met(name~CO_A,loc~cyt)    fwd_GALACTOACETYLTRAN_RXN_galactose, rvs_GALACTOACETYLTRAN_RXN_galactose
  complex_assembly_rule_0:          prot(name~lacZ,up,dw) + prot(name~lacZ,up,dw) <-> prot(name~lacZ,up!1,dw).prot(name~lacZ,up,dw!1)    fwd_complex_assembly_rule_0, rvs_complex_assembly_rule_0
  complex_assembly_rule_1:          prot(name~lacZ,up!1,dw).prot(name~lacZ,up,dw!1) + prot(name~lacZ,up!2,dw).prot(name~lacZ,up,dw!2) <-> prot(name~lacZ,up!1,dw!4).prot(name~lacZ,up!2,dw!1).prot(name~lacZ,up!3,dw!2).prot(name~lacZ,up!4,dw!3)    fwd_complex_assembly_rule_1, rvs_complex_assembly_rule_1
  complex_assembly_rule_2:          prot(name~lacA,up,dw) + prot(name~lacA,up,dw) <-> prot(name~lacA,up!1,dw).prot(name~lacA,up,dw!1)    fwd_complex_assembly_rule_2, rvs_complex_assembly_rule_2
  complex_assembly_rule_3:          prot(name~lacA,up,dw) + prot(name~lacA,up!1,dw).prot(name~lacA,up,dw!1) <-> prot(name~lacA,up!1,dw!3).prot(name~lacA,up!2,dw!1).prot(name~lacA,up!3,dw!2)    fwd_complex_assembly_rule_3, rvs_complex_assembly_rule_3
  docking_lacZ_pro4:                cplx(name~RNAP,dna) + dna(name~lacZ,type~pro4,prot) <-> cplx(name~RNAP,dna!1).dna(name~lacZ,type~pro4,prot!1)    fwd_docking_lacZ_pro4, rvs_docking_lacZ_pro4
  docking_lacZ_pro3:                cplx(name~RNAP,dna) + dna(name~lacZ,type~pro3,prot) <-> cplx(name~RNAP,dna!1).dna(name~lacZ,type~pro3,prot!1)    fwd_docking_lacZ_pro3, rvs_docking_lacZ_pro3
  docking_lacZ_pro2:                cplx(name~RNAP,dna) + dna(name~lacZ,type~pro2,prot) <-> cplx(name~RNAP,dna!1).dna(name~lacZ,type~pro2,prot!1)    fwd_docking_lacZ_pro2, rvs_docking_lacZ_pro2
  docking_lacZ_pro1:                cplx(name~RNAP,dna) + dna(name~lacZ,type~pro1,prot) <-> cplx(name~RNAP,dna!1).dna(name~lacZ,type~pro1,prot!1)    fwd_docking_lacZ_pro1, rvs_docking_lacZ_pro1
  falloff_lacA_ter1:                cplx(name~RNAP,dna!1).dna(name~lacA,type~ter1,prot!1) -> cplx(name~RNAP,dna) + dna(name~lacA,type~ter1,prot)    fwd_falloff_lacA_ter1
  falloff_lacA_ter2:                cplx(name~RNAP,dna!1).dna(name~lacA,type~ter2,prot!1) -> cplx(name~RNAP,dna) + dna(name~lacA,type~ter2,prot)    fwd_falloff_lacA_ter2
  sliding_lacZ_pro4:                cplx(name~RNAP,dna!1).dna(name~lacZ,type~pro4,prot!1) + 0 + dna(name~lacZ,type~pro3,prot) -> cplx(name~RNAP,dna!1).dna(name~lacZ,type~pro3,prot!1) + rna(name~lacZ,type~pro3,prot) + dna(name~lacZ,type~pro4,prot)    fwd_sliding_lacZ_pro4
  sliding_lacZ_pro3:                cplx(name~RNAP,dna!1).dna(name~lacZ,type~pro3,prot!1) + 0 + dna(name~lacZ,type~pro2,prot) -> cplx(name~RNAP,dna!1).dna(name~lacZ,type~pro2,prot!1) + rna(name~lacZ,type~pro2,prot) + dna(name~lacZ,type~pro3,prot)    fwd_sliding_lacZ_pro3
  sliding_lacZ_pro2:                cplx(name~RNAP,dna!1).dna(name~lacZ,type~pro2,prot!1) + 0 + dna(name~lacZ,type~pro1,prot) -> cplx(name~RNAP,dna!1).dna(name~lacZ,type~pro1,prot!1) + rna(name~lacZ,type~pro1,prot) + dna(name~lacZ,type~pro2,prot)    fwd_sliding_lacZ_pro2
  sliding_lacZ_pro1:                cplx(name~RNAP,dna!1).dna(name~lacZ,type~pro1,prot!1) + 0 + dna(name~lacZ,type~rbs,prot) -> cplx(name~RNAP,dna!1).dna(name~lacZ,type~rbs,prot!1) + rna(name~lacZ,type~rbs,prot) + dna(name~lacZ,type~pro1,prot)    fwd_sliding_lacZ_pro1
  sliding_lacZ_rbs:                 cplx(name~RNAP,dna!1).dna(name~lacZ,type~rbs,prot!1) + 0 + dna(name~lacZ,type~cds,prot) -> cplx(name~RNAP,dna!1).dna(name~lacZ,type~cds,prot!1) + rna(name~lacZ,type~cds,prot) + dna(name~lacZ,type~rbs,prot)    fwd_sliding_lacZ_rbs
  sliding_lacZ_cds:                 cplx(name~RNAP,dna!1).dna(name~lacZ,type~cds,prot!1) + 0 + dna(name~lacY,type~pro1,prot) -> cplx(name~RNAP,dna!1).dna(name~lacY,type~pro1,prot!1) + rna(name~lacY,type~pro1,prot) + dna(name~lacZ,type~cds,prot)    fwd_sliding_lacZ_cds
  sliding_lacY_pro1:                cplx(name~RNAP,dna!1).dna(name~lacY,type~pro1,prot!1) + 0 + dna(name~lacY,type~rbs,prot) -> cplx(name~RNAP,dna!1).dna(name~lacY,type~rbs,prot!1) + rna(name~lacY,type~rbs,prot) + dna(name~lacY,type~pro1,prot)    fwd_sliding_lacY_pro1
  sliding_lacY_rbs:                 cplx(name~RNAP,dna!1).dna(name~lacY,type~rbs,prot!1) + 0 + dna(name~lacY,type~cds,prot) -> cplx(name~RNAP,dna!1).dna(name~lacY,type~cds,prot!1) + rna(name~lacY,type~cds,prot) + dna(name~lacY,type~rbs,prot)    fwd_sliding_lacY_rbs
  sliding_lacY_cds:                 cplx(name~RNAP,dna!1).dna(name~lacY,type~cds,prot!1) + 0 + dna(name~lacA,type~rbs,prot) -> cplx(name~RNAP,dna!1).dna(name~lacA,type~rbs,prot!1) + rna(name~lacA,type~rbs,prot) + dna(name~lacY,type~cds,prot)    fwd_sliding_lacY_cds
  sliding_lacA_rbs:                 cplx(name~RNAP,dna!1).dna(name~lacA,type~rbs,prot!1) + 0 + dna(name~lacA,type~cds,prot) -> cplx(name~RNAP,dna!1).dna(name~lacA,type~cds,prot!1) + rna(name~lacA,type~cds,prot) + dna(name~lacA,type~rbs,prot)    fwd_sliding_lacA_rbs
  sliding_lacA_cds:                 cplx(name~RNAP,dna!1).dna(name~lacA,type~cds,prot!1) + 0 + dna(name~lacA,type~ter1,prot) -> cplx(name~RNAP,dna!1).dna(name~lacA,type~ter1,prot!1) + rna(name~lacA,type~ter1,prot) + dna(name~lacA,type~cds,prot)    fwd_sliding_lacA_cds
  sliding_lacA_ter1:                cplx(name~RNAP,dna!1).dna(name~lacA,type~ter1,prot!1) + 0 + dna(name~lacA,type~ter2,prot) -> cplx(name~RNAP,dna!1).dna(name~lacA,type~ter2,prot!1) + rna(name~lacA,type~ter2,prot) + dna(name~lacA,type~ter1,prot)    fwd_sliding_lacA_ter1
  dr_lacZ_rbs:                      cplx(name~Ribosome,rna) + rna(name~lacZ,type~rbs,prot) <-> cplx(name~Ribosome,rna!1).rna(name~lacZ,type~rbs,prot!1)    fwd_dr_lacZ_rbs, rvs_dr_lacZ_rbs
  dr_lacY_rbs:                      cplx(name~Ribosome,rna) + rna(name~lacY,type~rbs,prot) <-> cplx(name~Ribosome,rna!1).rna(name~lacY,type~rbs,prot!1)    fwd_dr_lacY_rbs, rvs_dr_lacY_rbs
  dr_lacA_rbs:                      cplx(name~Ribosome,rna) + rna(name~lacA,type~rbs,prot) <-> cplx(name~Ribosome,rna!1).rna(name~lacA,type~rbs,prot!1)    fwd_dr_lacA_rbs, rvs_dr_lacA_rbs
  fr_lacA_ter1:                     cplx(name~Ribosome,rna!1).rna(name~lacA,type~ter1,prot!1) -> cplx(name~Ribosome,rna) + rna(name~lacA,type~ter1,prot)    fwd_fr_lacA_ter1
  fr_lacA_ter2:                     cplx(name~Ribosome,rna!1).rna(name~lacA,type~ter2,prot!1) -> cplx(name~Ribosome,rna) + rna(name~lacA,type~ter2,prot)    fwd_fr_lacA_ter2
  sr_lacZ_rbs:                      cplx(name~Ribosome,rna!1).rna(name~lacZ,type~rbs,prot!1) + 0 + rna(name~lacZ,type~cds,prot) -> cplx(name~Ribosome,rna!1).rna(name~lacZ,type~cds,prot!1) + prot(name~lacZ,dna,met,prot,rna,up,dw) + rna(name~lacZ,type~cds,prot)    fwd_sr_lacZ_rbs
  sr_lacZ_cds:                      cplx(name~Ribosome,rna!1).rna(name~lacZ,type~cds,prot!1) + rna(name~lacY,type~pro1,prot) -> cplx(name~Ribosome,rna!1).rna(name~lacY,type~pro1,prot!1) + rna(name~lacZ,type~cds,prot)    fwd_sr_lacZ_cds
  sr_lacY_pro1:                     cplx(name~Ribosome,rna!1).rna(name~lacY,type~pro1,prot!1) + rna(name~lacY,type~rbs,prot) -> cplx(name~Ribosome,rna!1).rna(name~lacY,type~rbs,prot!1) + rna(name~lacY,type~pro1,prot)    fwd_sr_lacY_pro1
  sr_lacY_rbs:                      cplx(name~Ribosome,rna!1).rna(name~lacY,type~rbs,prot!1) + 0 + rna(name~lacY,type~cds,prot) -> cplx(name~Ribosome,rna!1).rna(name~lacY,type~cds,prot!1) + prot(name~lacY,dna,met,prot,rna,up,dw) + rna(name~lacY,type~cds,prot)    fwd_sr_lacY_rbs
  sr_lacY_cds:                      cplx(name~Ribosome,rna!1).rna(name~lacY,type~cds,prot!1) + rna(name~lacA,type~rbs,prot) -> cplx(name~Ribosome,rna!1).rna(name~lacA,type~rbs,prot!1) + rna(name~lacY,type~cds,prot)    fwd_sr_lacY_cds
  sr_lacA_rbs:                      cplx(name~Ribosome,rna!1).rna(name~lacA,type~rbs,prot!1) + 0 + rna(name~lacA,type~cds,prot) -> cplx(name~Ribosome,rna!1).rna(name~lacA,type~cds,prot!1) + prot(name~lacA,dna,met,prot,rna,up,dw) + rna(name~lacA,type~cds,prot)    fwd_sr_lacA_rbs
  sr_lacA_cds:                      cplx(name~Ribosome,rna!1).rna(name~lacA,type~cds,prot!1) + rna(name~lacA,type~ter1,prot) -> cplx(name~Ribosome,rna!1).rna(name~lacA,type~ter1,prot!1) + rna(name~lacA,type~cds,prot)    fwd_sr_lacA_cds
  sr_lacA_ter1:                     cplx(name~Ribosome,rna!1).rna(name~lacA,type~ter1,prot!1) + rna(name~lacA,type~ter2,prot) -> cplx(name~Ribosome,rna!1).rna(name~lacA,type~ter2,prot!1) + rna(name~lacA,type~ter1,prot)    fwd_sr_lacA_ter1
  ProtMet_RuleAssembly_1:           prot(name~lacI,met,up,dw) + met(name~beta_ALLOLACTOSE,loc~cyt,prot) <-> prot(name~lacI,met!1,up,dw).met(name~beta_ALLOLACTOSE,loc~cyt,prot!1)    fwd_ProtMet_RuleAssembly_1, rvs_ProtMet_RuleAssembly_1
  TF_TFBS_rule_1:                   prot(name~lacI,dna,met) + dna(name~lacZ,type~pro1,prot) <-> prot(name~lacI,dna!1,met).dna(name~lacZ,type~pro1,prot!1)    fwd_TF_TFBS_rule_1, rvs_TF_TFBS_rule_1
  TF_TFBS_rule_2:                   prot(name~lacI,dna!1,met).dna(name~lacZ,type~pro1,prot!1) + met(name~beta_ALLOLACTOSE,loc~cyt,prot) -> prot(name~lacI,dna,met!1).dna(name~lacZ,type~pro1,prot).met(name~beta_ALLOLACTOSE,loc~cyt,prot!1)    fwd_TF_TFBS_rule_2
end reaction rules

end model
